OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Basic P300 2/4
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  For prerecorded data to test this P300, see

  http://openvibe.inria.fr/datasets/
Comment
  Overview

  This scenario should be used to train
  the LDA classifier.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 70%, just run a new
  4-online session to have better results.

Generic stream reader => #0
  Filename = F:/PhDProjectBackup/small_matrix/imp_signals/swati-3g-3o-p300-online-[2022.01.09-09.44.38].ov
#0.Output stream 2 -> Channel Selector "TP9;AF8;AF9,TP10"
  Channel List = TP9;AF8;AF9,TP10
  Action = Select EEG
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.0000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
#0.Output stream 3 -> Stimulation Filter => #3
  Default action = Select
  Time range begin = 0
  Time range end = 20
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_ExperimentStop
  Stimulation range end = OVTK_StimulationId_ExperimentStop
Input signal=#2, Input stimulations=#3 -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.600
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Input signal=#2, Input stimulations=#3 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.600
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
target=#4, non-target=#5, stimulations=#3 -> Dump Epoch Data
  Clock frequency (Hz) = 64
  Script = C:/Users/Admin/AppData/Roaming/OpenVIBE-3.2.0/scenarios/box-tutorials/python3/scripts/epoch-data-reproduce.py
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
